CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r0(?P<Row>\d)c0(?P<Column>\d)f0(?P<Site>\d)_round(?P<Round>\d)-ch(?P<Channel>\d)sk1fk1fl1.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:CellMask_Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:A568
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):9,27
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nucleus
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:CellMask_Green
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Hoechst_Times30
    Image or measurement?:Image
    Select the first image:Hoechst
    Multiply the first image by:30
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst_Times30
    Name the output image:Hoechst_Nuclei_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FF
    Select objects to display:Nucleus

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:Hoechst_Nuclei_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Round\g<Round>_Seg
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Segmented_Images_Hoechst
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ImageMath:[module_num:11|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellMask_Times30
    Image or measurement?:Image
    Select the first image:CellMask_Green
    Multiply the first image by:30
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellMask_Times30
    Name the output image:CellMask_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FF
    Select objects to display:Cell

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CellMask_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellMask_Green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Round\g<Round>_Seg
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Segmented_Images_Cell_Mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

TrackObjects:[module_num:14|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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:Nucleus
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:No
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    Average cell diameter in pixels:15
    Use advanced configuration parameters:No
    Cost of cell to empty matching:15.0
    Weight of area difference in function matching cost:25.0

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:TrackedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Round\g<Round>_TrackedNuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|TrackedNuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:A568, A647, CellMask_Green, Hoechst
    Select objects to measure:Cell, Cytoplasm, Nucleus

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Cell, Cytoplasm, Nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|URL_A568,Image|URL_CellMask_Green,Image|URL_Hoechst,Image|URL_A647,Image|Metadata_Site,Image|Metadata_Row,Image|Metadata_Series,Image|Metadata_Round,Image|Metadata_Well,Image|Metadata_Frame,Image|Metadata_FileLocation,Image|Metadata_Column,Image|Metadata_Channel,Image|Width_CellMask_Green,Image|Width_Hoechst,Image|Width_A647,Image|Width_A568,Image|Scaling_A568,Image|Scaling_CellMask_Green,Image|Scaling_Hoechst,Image|Scaling_A647,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|ExecutionTime_10SaveImages,Image|ExecutionTime_02Metadata,Image|ExecutionTime_03NamesAndTypes,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nucleus
    Combine these object measurements with those of the previous object?:No
    File name:Round\g<Round>_\g<Well>_site\g<Site>_Measurements.csv
    Use the object name for the file name?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:19|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enabled:False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
    Store batch files in default output folder?:No
    Output folder path:/Users/mb8rg/Desktop/Fixed_Cell_Culture_4i_image_analysis
    Are the cluster computers running Windows?:No
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